OpenViBE-Scenario
Comment
  Use with openvibe 0.18

  Read data from ser2sock, try each one of the interpolation method.

TCP reader analog => #0
  Clock frequency (Hz) = 64
  Script = ${__volatile_ScenarioDir}/ov-tcp-reader-analog.py
  IP = 127.0.0.1
  Port = 10000
  Debug = false
  Interpolation method = 0
Signal=#0 -> Signal display "linear"
  Time Scale = 8
  Display Mode = Scroll
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100

TCP reader analog => #2
  Clock frequency (Hz) = 64
  Script = ${__volatile_ScenarioDir}/ov-tcp-reader-analog.py
  IP = 127.0.0.1
  Port = 10000
  Debug = false
  Interpolation method = 2
Signal=#2 -> Signal display "nearest"
  Time Scale = 8
  Display Mode = Scroll
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100

TCP reader analog => #4
  Clock frequency (Hz) = 64
  Script = ${__volatile_ScenarioDir}/ov-tcp-reader-analog.py
  IP = 127.0.0.1
  Port = 10000
  Debug = false
  Interpolation method = 1
Signal=#4 -> Signal display "cubic"
  Time Scale = 8
  Display Mode = Scroll
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
