OpenViBE-Scenario

0xc67a01dc TCP reader analog client => #0
  Clock frequency (Hz) = 64
  Script = ${__volatile_ScenarioDir}/ov-tcp-reader-analog-client.py
  IP = 127.0.0.1
  Port = 10000
  Debug = false
  Interpolation method = 0
Signal=#0 -> Signal display "TCP reader"
  Time Scale = 8
  Display Mode = Scroll
  Manual Vertical Scale = false
  Vertical Scale = 100
#0 -> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Low pass
  Filter order = 4
  Low cut frequency (Hz) = 5
  High cut frequency (Hz) = 5
  Pass band ripple (dB) = 0.5
Signal=#2 -> 0xc73e83ec Signal display "filtered"
  Time Scale = 8
  Display Mode = Scroll
  Manual Vertical Scale = false
  Vertical Scale = 100
#0 -> Temporal filter => #4
  Filter method = Butterworth
  Filter type = Low pass
  Filter order = 4
  Low cut frequency (Hz) = 0.125
  High cut frequency (Hz) = 3
  Pass band ripple (dB) = 0.5
-> Signal Differential/Integral => #5
  Operation = Differential
  Order = 1
Signal=#5 -> Signal display "differential"
  Time Scale = 8
  Display Mode = Scroll
  Manual Vertical Scale = false
  Vertical Scale = 100
Signal=#4 -> Signal display "filtered2"
  Time Scale = 8
  Display Mode = Scroll
  Manual Vertical Scale = false
  Vertical Scale = 100
control GUI
  Clock frequency (Hz) = 64
  Script = ${__volatile_ScenarioDir}/python_control_GUI.py
  Sampling frequency = 512
  Generated epoch sample count = 128
  min value = -2
  max value = 5
-> Channel Selector "max" => #9
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
Input - A=#5, Input - B=#9 -> Simple DSP "if > max" => #10
  Equation = a > b
-> Signal Decimation
  Decimation factor = 8
-> Matrix Display "trigger"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Signal=#10 -> Signal display "trigger"
  Time Scale = 30
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 500
