OpenViBE-Scenario
Comment
  Select gdf for sample raw signal
Comment
  Use with openvibe 0.18

  Detects beats from raw pulse data (user ser2sock).

  Send stimulation at each beat.
Comment
  threshold for beat detection
Comment
  +0.5 while beat, else -0.5
Comment
  Generate OVTK_GDF_Beep when reach positive

GDF file reader => #0
  Filename = ${__volatile_ScenarioDir}/data/pulse_sample.gdf
  Samples per buffer = 128
  Subtract physical minimum = false
#0.EEG stream -> Identity => #1
-> Temporal filter
  Filter method = Butterworth
  Filter type = Low pass
  Filter order = 4
  Low cut frequency (Hz) = 0.125
  High cut frequency (Hz) = 3
  Pass band ripple (dB) = 0.5
-> Identity => #3
Signal=#3 -> Signal display "filtered"
  Time Scale = 8
  Display Mode = Scroll
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
#3 -> Signal Differential/Integral => #5
  Operation = Differential
  Order = 1
Signal=#5 -> Signal display "differential"
  Time Scale = 8
  Display Mode = Scroll
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
#1 -> Signal Decimation
  Decimation factor = 8
-> Matrix Display "raw values"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
control GUI
  Clock frequency (Hz) = 64
  Script = ${__volatile_ScenarioDir}/python_control_GUI.py
  Sampling frequency = 512
  Generated epoch sample count = 128
  min value = -2
  max value = 5
-> Channel Selector "max chan" => #10
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
Input - A=#5, Input - B=#10 -> Simple DSP "if > max" => #11
  Equation = (a > b) - 0.5
-> Sign Change Detector
  Sign switch to positive stimulation = OVTK_GDF_Beep
  Sign switch to negative stimulation = OVTK_StimulationId_NonTarget
  Channel Index = 0
-> Stimulation Filter "select BEEP"
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Beep
  Stimulation range end = OVTK_GDF_Beep
-> Identity => #14
Signal=#1, Stimulations=#14 -> Signal display "TCP reader"
  Time Scale = 8
  Display Mode = Scroll
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
#14 -> 0xc67a01dc TCP Writer
  Port = 11000
  Stimulus output = String
  0x8d21ff41 = ${__volatile_ScenarioDir}/TCP_writer.cfg
Signal=#11 -> Signal display "trigger"
  Time Scale = 8
  Display Mode = Scroll
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100

0xc73e83ec TCP reader analog client
  Clock frequency (Hz) = 64
  Script = ${__volatile_ScenarioDir}/ov-tcp-reader-analog-client.py
  IP = 127.0.0.1
  Port = 10000
  Debug = false
  Interpolation method = 0
  0x8d21ff41 = ${__volatile_ScenarioDir}/analog_reader.cfg
