OpenViBE-Scenario
Comment
  Use with openvibe 0.18

  Record data from ser2sock.

TCP reader analog
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/ov-tcp-reader-analog-client.py
  IP = 127.0.0.1
  Port = 10000
  Debug = false
  Interpolation method = 0
  0x8d21ff41 = ${__volatile_ScenarioDir}/analog_reader.cfg
-> Identity => #1
0xc67a01dc Processing stims => #2
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/ov-tcp-reader-stimulus-server.py
  IP = 127.0.0.1
  Port = 11001
  Debug = false
  0x8d21ff41 = ${__volatile_ScenarioDir}/processing_stims.cfg
Heart beats => #3
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/ov-tcp-reader-stimulus-client.py
  IP = 127.0.0.1
  Port = 11000
  Debug = false
  0x8d21ff41 = ${__volatile_ScenarioDir}/beat_stims.cfg
Input stimulations 1=#2, Input stimulations 2=#3 -> Stimulation multiplexer
-> Identity => #5
-> 0xc73e83ec Stimulation listener
  Log level to use = Information
Signal=#1, Stimulations=#5 -> Signal display "TCP reader"
  Time Scale = 8
  Display Mode = Scroll
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
Signal=#1, Stimulation=#5 -> GDF file writer
  Filename = ${__volatile_ScenarioDir}/../recordings/record-[$core{date}-$core{time}].gdf
